PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 800]
  color = $[-1,-1,-1]
  expName = change_blindness_flicker
  keyboardBackend = PsychToolbox
  logging level = debug
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Routines
  Routine trial
    CodeComponent code_trial
      Code Type = Py
      Begin Experiment:
        # form image components for drawing stimuli
        img_absent = visual.ImageStim(
            win=win,
            name='img_absent', units='pix',
            image='sin', mask=None,
            ori=0, pos=(0, 0), size=(1024, 768),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=512, interpolate=True, depth=0.0)
        img_present = visual.ImageStim(
            win=win,
            name='img_present', units='pix',
            image='sin', mask=None,
            ori=0, pos=(0, 0), size=(1024, 768),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=512, interpolate=True, depth=-1.0)
      Begin Routine:
        img_present.setImage(os.path.join('img_stimuli', target_present))
        img_absent.setImage(os.path.join('img_stimuli', target_absent))


        # store trial start time for saving during "End Routine"
        trial_start_time = globalClock.getTime()
      Each Frame:
        # show image with target present for 240ms,
        # nothing for 80ms, then the image with the
        # target absent for 240ms, then nothing for the
        # remaining 80ms of the cycle
        # (so in total, each cycle is 640ms)

        if tThisFlip%0.64<0.24:
            img_present.draw()
        elif 0.32 <= (tThisFlip%0.64)<0.56:
            img_absent.draw()
      End Routine:
        # save trial end time
        trial_end_time = globalClock.getTime()

        # if the participant did make a mouse click during the trial's 30s
        if len(mouse_trial.x):
            # if participant's click is within two times the target radius,
            # determined using Pythagora's, register the click as being correct.
            # (the radius is based on the pixel area specified in the excel sheet from the change blindness database.
            # the reason that we multiply the radius by 2 here is that for
            # elongated objects, the radius ends up being way too short,
            # and the risk of false negatives is probably much greater than
            # false positives)
            if (((target_xcoord_px - mouse_trial.x)**2 + (target_ycoord_px - mouse_trial.y)**2)**(1/2)) < target_radius_px*2:
                img_trial_loop.addData('mouse_trial.correct', 1)
            # if participant's click is more than 2 target radii away from
            # the target center, register it as incorrect.
            else:
                img_trial_loop.addData('mouse_trial.correct', 0)
        else:
            img_trial_loop.addData('mouse_trial.correct', "no_response")

        # save trial start time, using saved value from "Begin Routine",
        # and trial end time
        img_trial_loop.addData('trial_start_time', trial_start_time)
        img_trial_loop.addData('trial_end_time', trial_end_time)
    MouseComponent mouse_trial
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine instructions
    TextComponent text_welcome
      letterHeight = 0.7
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 26
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      text:
        Du kommer att visas bildspel.

        Varje bildspel växlar mellan två bilder. I den ena bilden har ett föremål tagits bort så att det saknas.

        Du ska leta efter objektet som hela tiden försvinner och dyker upp igen i bildspelet. Så snart du hittar det, klicka med vänster musknapp på den plats objektet befinner sig.

        Testet tar cirka 10-15 minuter. Du kommer att se ett meddelande när du är klar.

        Klicka på texten nedanför för att pröva ett exempel.
    TextComponent text_welcome_continue
      letterHeight = 0.5
      pos = (0, -7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Klicka här när du läst klart för att pröva ett exempel
      units = deg
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    MouseComponent mouse_welcome
      clickable = text_welcome_continue
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.5
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  Routine end_screen
    TextComponent text_end
      letterHeight = 1.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
      wrapWidth = 26
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      text:
        Tack!

        Ta cirka två minuters paus innan du matar in ditt deltagar-ID för nästa test.
  Routine fixation_3000ms
    PolygonComponent polygon
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = deg
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  Routine blank_1000ms
    TextComponent text_blank_placeholder
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine practice
    CodeComponent code_practice
      Code Type = Py
      Begin Experiment:
        # form circle representing target area of practice image
        practice_target_radius = 22.140398025397776
        practice_target_xcoord = -222.0
        practice_target_ycoord = 171.0
        practice_target_coords = (
            practice_target_xcoord,
            practice_target_ycoord
        )
        circle_practice = visual.Polygon(
            win=win, name='circle_practice',
            edges=120, size=(practice_target_radius*2, practice_target_radius*2),
            ori=0, pos=practice_target_coords,
            lineWidth=1, lineColor=[1,-1,-1], lineColorSpace='rgb',
            fillColor=None, fillColorSpace='rgb',
            opacity=1, depth=-2.0, interpolate=True)

        # feedback text stimulus for practice
        text_feedback = visual.TextStim(win=win, name='text_feedback',
            text='',
            font='Arial',
            units='deg', pos=(0, 12), height=0.8, wrapWidth=20, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-1.0);

        # 'continue' text stimulus for practice
        text_continue = visual.TextStim(win=win, name='text_continue',
            text='Klicka här för att fortsätta.',
            font='Arial',
            units='deg', pos=(0, -12), height=0.5, wrapWidth=20, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-1.0);
      Begin Routine:
        img_present.setImage(os.path.join('img_stimuli', '019_L_filler_present_lamp_sized.jpg'))
        img_absent.setImage(os.path.join('img_stimuli', '019_L_filler_absent_lamp_sized.jpg'))

        # initialize list of previous frame's clicked buttons
        prevButtonState = []

        # initialize indicator of whether participant has tried
        # to click target or not
        has_clicked = False
      Each Frame:
        buttons = mouse_practice.getPressed()
        if buttons != prevButtonState and t>0.2:  # button state changed and more than 0.2s have passed since onset?
            prevButtonState = buttons
            if buttons[0] == 1:  # state changed to a new left button click
                if has_clicked:
                    # check if mouse was 'inside' continue text
                    if text_continue.contains(mouse_practice):
                        continueRoutine = False
                else:
                    # check if mouse was inside target circle
                    correct_click = False
                    if circle_practice.contains(mouse_practice):
                            correct_click = True
                    if correct_click:
                        text_feedback.text = 'Det var rätt! Föremålet är markerat nedan i rött.'
                    else:
                        text_feedback.text = 'Du missade föremålet. Det är markerat nedan i rött.'
                    x, y = mouse_practice.getPos()
                    mouse_practice.x = x
                    mouse_practice.y = y
                    has_clicked = True

        if not has_clicked:
            # show image with target present for 240ms,
            # nothing for 80ms, then the image with the
            # target absent for 240ms, then nothing for the
            # remaining 80ms of the cycle
            # (so in total, each cycle is 640ms)
            if tThisFlip%0.64<0.24:
                img_present.draw()
            elif 0.32 <= (tThisFlip%0.64)<0.56:
                img_absent.draw()
        else:
            img_present.draw()
            circle_practice.draw()
            text_feedback.draw()
            text_continue.draw()
      End Routine:
        # store data about where participant clicked on target area
        thisExp.addData('mouse_practice.x', mouse_practice.x)
        thisExp.addData('mouse_practice.y', mouse_practice.y)
        thisExp.addData('mouse_practice.correct', correct_click)
    MouseComponent mouse_practice
      clickable = circle_practice
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine start
    TextComponent text_start_inst
      letterHeight = 0.7
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 26
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      text:
        Testet fortsätter till nästa bildspel om du inte svarar inom 30 sekunder.

        Testet tar cirka 10-15 minuter. Du kommer att se ett meddelande när du är klar.

        Klicka på texten nedanför för att börja.
    TextComponent text_start_continue
      letterHeight = 0.5
      pos = (0, -7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Klicka här när du läst klart för att starta experimentet
      units = deg
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    MouseComponent mouse_start
      clickable = text_start_continue
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.5
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Flow
  Routine instructions
  Routine practice
  Routine start
  LoopInitiator img_trial_loop loopType="TrialHandler"
    conditionsFile = $os.path.join("specification_csvs", "change_blindness_flicker_stimuli_data.csv")
    loopType = random
    nReps = 1
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    Routine fixation_3000ms
    Routine blank_1000ms
    Routine trial
  LoopTerminator img_trial_loop
  Routine end_screen
