PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 800]
  color = $[-1,-1,-1]
  expName = change_blindness_sidebyside
  keyboardBackend = PsychToolbox
  logging level = debug
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Routines
  Routine trial
    MouseComponent mouse_trial
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    CodeComponent code_trial
      Code Type = Py
      Before Experiment:
        # function for calculating euclidean distance (using Pythagoras')
        # between two points
        def euclid_dist(x0, y0, x1, y1):
            delta_x = x1 - x0
            delta_y = y1 - y0
            norm_dist = (delta_x**2 + delta_y**2)**(1/2)
            return norm_dist
      Begin Experiment:
        # original image's vertical/horizontal size
        ORIG_X_SIZE = 1024
        ORIG_Y_SIZE = 768

        # factor with which stimuli images are resized/scaled down
        # RESIZE_FACTOR = 19/32
        RESIZE_FACTOR = 39/64
        # additional horizontal offset, to distance images
        # slightly from each other
        EXTRA_X_OFFSET = 10

        # scaled down images' horizontal/vertical sizes
        new_x_size = ORIG_X_SIZE * RESIZE_FACTOR
        new_y_size = ORIG_Y_SIZE * RESIZE_FACTOR

        # stimuli images' midpoints (horizontal axis) absolute distance
        # from original image's midpoint coordinates
        total_x_offset = new_x_size / 2 + EXTRA_X_OFFSET



        # form image components for drawing stimuli
        img_absent = visual.ImageStim(
            win=win,
            name='img_absent', units='pix',
            image='sin', mask=None,
            ori=0, pos=(-total_x_offset, 0), size=(new_x_size, new_y_size),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=512, interpolate=True, depth=0.0)
        img_present = visual.ImageStim(
            win=win,
            name='img_present', units='pix',
            image='sin', mask=None,
            ori=0, pos=(total_x_offset, 0), size=(new_x_size, new_y_size),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=512, interpolate=True, depth=-1.0)
      Begin Routine:
        img_present.setImage(os.path.join('img_stimuli', target_present))
        img_absent.setImage(os.path.join('img_stimuli', target_absent))


        # store trial start time for saving during "End Routine"
        trial_start_time = globalClock.getTime()
      Each Frame:
        # show image with target present for 240ms,
        # nothing for 80ms, then the image with the
        # target absent for 240ms, then nothing for the
        # remaining 80ms of the cycle
        # (so in total, each cycle is 640ms)
        img_present.draw()
        img_absent.draw()
      End Routine:
        # save trial end time
        trial_end_time = globalClock.getTime()

        # if the participant did make a mouse click during the trial's 30s
        if len(mouse_trial.x):
            # find target middle coordinates for left/right image, adjusting for resizing
            # and extra horizontal offset
            left_target_x = (target_xcoord_px * RESIZE_FACTOR) - total_x_offset
            right_target_x = (target_xcoord_px * RESIZE_FACTOR) + total_x_offset
            target_y = target_ycoord_px * RESIZE_FACTOR

            # if participant's click is within (two times the target radius, then rescaled
            # according to stimuli image sizes),
            # determined using Pythagora's, register the click as being correct.
            # (the radius is based on the pixel area specified in the excel sheet from the change blindness database.
            # the reason that we multiply the radius by 2 here is that for
            # elongated objects, the radius ends up being way too short,
            # and the risk of false negatives is probably much greater than
            # false positives)
            rescaled_target_radius = target_radius_px * 2 * RESIZE_FACTOR
            left_dist = euclid_dist(left_target_x, target_y, mouse_trial.x, mouse_trial.y)
            right_dist = euclid_dist(right_target_x, target_y, mouse_trial.x, mouse_trial.y)
            if (left_dist < rescaled_target_radius) or (right_dist < rescaled_target_radius):
                img_trial_loop.addData('mouse_trial.correct', 1)
            # if participant's click is more than 2 target radii away from
            # the target center, register it as incorrect.
            else:
                img_trial_loop.addData('mouse_trial.correct', 0)
        else:
            img_trial_loop.addData('mouse_trial.correct', "no_response")

        # save trial start time, using saved value from "Begin Routine",
        # and trial end time
        img_trial_loop.addData('trial_start_time', trial_start_time)
        img_trial_loop.addData('trial_end_time', trial_end_time)
  Routine instructions
    TextComponent text_welcome
      letterHeight = 0.7
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 26
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      text:
        Du kommer att visas bilder, liknande de i det förra testet.

        Du kommer att få se två bilder bredvid varandra. I den vänstra bilden har ett föremål tagits bort så att det saknas.

        Du ska leta efter objektet som finns i den högra men inte i den vänstra bilden. Så snart du hittar det, klicka där det är placerat i den högra bilden.

        Testet tar cirka 5-7 minuter. Du kommer att se ett meddelande när du är klar.

        Klicka på texten nedanför för att starta experimentet.
    TextComponent text_welcome_start
      letterHeight = 0.5
      pos = (0, -7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Klicka här när du läst klart för att börja experimentet
      units = deg
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    MouseComponent mouse_welcome
      clickable = text_welcome_start
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.5
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  Routine end_screen
    TextComponent text_end
      letterHeight = 1.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
      wrapWidth = 26
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      text:
        Tack!

        Ta cirka två minuters paus innan du matar in ditt deltagar-ID för nästa test.
  Routine fixation_3000ms
    PolygonComponent polygon
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = deg
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  Routine blank_1000ms
    TextComponent text_blank_placeholder
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine instructions
  LoopInitiator img_trial_loop loopType="TrialHandler"
    conditionsFile = $os.path.join("specification_csvs", "change_blindness_sidebyside_stimuli_data.csv")
    loopType = random
    nReps = 1
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    Routine fixation_3000ms
    Routine blank_1000ms
    Routine trial
  LoopTerminator img_trial_loop
  Routine end_screen
